OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

fear
  Filename = ${Player_ScenarioDirectory}/fear.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
-> Feature aggregator => #1
happy
  Filename = ${Player_ScenarioDirectory}/happy.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
-> Feature aggregator => #3
sad
  Filename = ${Player_ScenarioDirectory}/sad.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
-> Feature aggregator => #5
0xc67a01dc neutral
  Filename = ${Player_ScenarioDirectory}/neutral.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
-> Feature aggregator => #7
Timeout => #8
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
Stimulations=#8, Features for class 1=#1, Features for class 2=#3, Features for class 3=#5, Features for class 4=#7 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Class 4 label = OVTK_StimulationId_Label_04
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause

0xc73e83ec Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
