OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Data collection patch
  we offer to collect GDF-file with each data class independently
Comment
  try to use epoch averaging
  instead signal averaging
Comment
  channel indices depends on device type
  (this patch is tuned for Muse headband)
Comment
  feature aggregation
Comment
  try to use CSV-file writer instead of GDF

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #4
-> Spectral analysis (FFT) => #5
  Spectral components = Amplitude
#5.Amplitude -> alpha => #6
  Frequencies to select = 7:13
#5.Amplitude -> beta => #7
  Frequencies to select = 13:25
#5.Amplitude -> gamma => #8
  Frequencies to select = 25:60
#5.Amplitude -> delta => #9
  Frequencies to select = 4:7
#5.Amplitude -> theta => #10
  Frequencies to select = 0:4
alpha=#6, beta=#7, gamma=#8, delta=#9, theta=#10 -> Simple DSP
  Equation = alpha/(alpha+beta+gamma+delta+theta)
-> Simple DSP "inverse alpha power" => #12
  Equation = 1/x
#4 -> Channel Selector "FP1 (2)"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #14
  Spectral components = Amplitude
#14.Amplitude -> alpha 1 => #15
  Frequencies to select = 7:13
#4 -> Channel Selector "FP2 (3)"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #17
  Spectral components = Amplitude
#17.Amplitude -> alpha 2 => #18
  Frequencies to select = 7:13
A=#15, B=#18 -> Simple DSP "alpha1+alpha2" => #19
  Equation = A-B
A=#15, B=#18 -> Simple DSP "alpha1-alpha2" => #20
  Equation = A+B
A=#19, B=#20 -> Simple DSP "asymmetry coefficient" => #21
  Equation = A/B
Input stream 1=#12, Input stream 2=#21 -> Feature aggregator
-> Simple DSP => #23
  Equation = x
Signal=#23 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/record-[$core{date}-$core{time}].gdf

0xc67a01dc Clock stimulator => #25
  Interstimulation interval (in sec) = 3.0
  Stimulation = OVTK_GDF_100_Watt
0xc67a01dc Clock stimulator => #26
  Interstimulation interval (in sec) = 5.0
  Stimulation = OVTK_StimulationId_VisualStimulationStop
Input stimulations 1=#25, Input stimulations 2=#26 -> 0xc67a01dc Stimulation multiplexer
-> 0xc67a01dc Display cue image
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = E:/HackTheBrain/IAPS 2008 1-20/IAPS 1-20 Images/9265.jpg
  Stimulation 1 = OVTK_GDF_100_Watt

0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4

0xc73e83ec CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
